PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SYM_CABI_RSfMRI_1
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    ImageComponent rs_cross
      image = ../images/fixation_cross.png
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        ##BEFORE EXPERIMENT
        import utils as ut
      Begin Routine:
        ### START ROUTINE SBASODI1 (FIXATION)
        ut.task_trigger(value="1", port, outlet, desc="Fixation Image")
      End Routine:
        ### END ROUTINE SBASODI1 (HIGH_FIXATION)
        ut.task_trigger(value="2", port, outlet, desc="Fixation Image")
Flow
  Routine trial
