PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = CABI_SYM_exp_with_ports_and_counter_balancing
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine high_val_imgs
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    ParallelOutComponent port_high_val_img_start
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0
      syncScreen = True
      syncScreenRefresh = False
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    ImageComponent high_val_img
      image [set every repeat] = $image_file
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    ParallelOutComponent port_high_val_img_end
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 6
      stopData = 0
      stopVal [duration (s)] = 0
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent port_high_blank_start
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 6.0
      stopData = 0
      stopVal [duration (s)] = 0
      syncScreen = True
      syncScreenRefresh = False
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    ImageComponent high_blank_image
      image = images/blank_screen.png
      size = (1, 1)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 3
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    ParallelOutComponent port_high_blank_end
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 9
      stopData = 0
      stopVal [duration (s)] = 0
      syncScreen = True
      syncScreenRefresh = False
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  Routine low_val_imgs
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    ParallelOutComponent port_low_val_img_start
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0
      syncScreen = True
      syncScreenRefresh = False
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    ImageComponent low_val_img
      image [set every repeat] = $image_file
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    ParallelOutComponent port_low_val_img_end
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 6
      stopData = 0
      stopVal [duration (s)] = 0
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent port_low_blank_img_start
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 6
      stopData = 0
      stopVal [duration (s)] = 0
      syncScreen = True
      syncScreenRefresh = False
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    ImageComponent low_blank_img
      image = images/blank_screen.png
      size = (1, 1)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 3
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    ParallelOutComponent port_low_blank_img_end
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 9
      stopData = 0
      stopVal [duration (s)] = 0
      syncScreen = True
      syncScreenRefresh = False
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  Routine high_fixation_cross
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    ParallelOutComponent port_high_fixation_img_start
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0
      syncScreen = True
      syncScreenRefresh = False
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    ImageComponent high_fixation_img
      image = images/fixation_cross.png
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 13
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    ParallelOutComponent port_high_fixation_img_end
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 13
      stopData = 0
      stopVal [duration (s)] = 0
      syncScreen = True
      syncScreenRefresh = False
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  Routine help_guide
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    TextComponent help_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Please empathize with the pictures shown until the next picture appears.

        When the fixation cross appears in the middle of the screen, focus on it (no need to empathize).
    KeyboardComponent key_resp
      allowedKeys = '5','t'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 1
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  Routine counter_balance_code
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    CodeComponent code_2
      Code Type = Py
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      Before Experiment:
        import numpy as np
        import random

        high_imgs_order=np.random.permutation(18).reshape((6,3)).tolist()

        low_imgs_order=np.random.permutation(18).reshape((6,3)).tolist()

        blocks = ['H']*6 + ['L']*6
        random.shuffle(blocks)
        global high_nReps
        global low_nReps
        high_nReps = 1
        low_nReps = 0

        if blocks[0] == 'L':
            high_nReps = 0
            low_nReps = 1
      Begin Experiment:
        global high_nReps
        global low_nReps
      Begin Routine:
        if blocks[block_repeat.thisN] == 'H':
            high_nReps = 1
            low_nReps = 0
        elif blocks[block_repeat.thisN] == 'L':
            high_nReps = 0
            low_nReps = 1
        else:
            raise Exception ('Invalid block ID. It should be either "H" or "L"')
  Routine low_fixation_cross
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    ParallelOutComponent port_low_fixation_img_start
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0
      syncScreen = True
      syncScreenRefresh = False
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    ImageComponent low_fixation_img
      image = images/fixation_cross.png
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 13
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    ParallelOutComponent port_low_fixation_img_end
      address = 0x0378
      register = EIO
      startData = 1
      startVal [time (s)] = 13
      stopData = 0
      stopVal [duration (s)] = 0
      syncScreen = True
      syncScreenRefresh = False
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Flow
  Routine help_guide
  LoopInitiator block_repeat loopType="TrialHandler"
    loopType = sequential
    nReps = 12
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    Routine counter_balance_code
    LoopInitiator high_block loopType="TrialHandler"
      loopType = sequential
      nReps = high_nReps
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      LoopInitiator within_high_block loopType="TrialHandler"
        Selected rows = $high_imgs_order.pop()
        conditionsFile = high_valence.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'image_file': 'images/high__1_Dog 6.jpg'},
          {'image_file': 'images/high__2_Lake 12.jpg'},
          {'image_file': 'images/high__3_Beach 1.jpg'},
          {'image_file': 'images/high__4_Lake 9.jpg'},
          {'image_file': 'images/high__5_Lake 2.jpg'},
          {'image_file': 'images/high__6_Dog 12.jpg'},
          {'image_file': 'images/high__7_Rainbow 2.jpg'},
          {'image_file': 'images/high__8_Beach 2.jpg'},
          {'image_file': 'images/high__9_Lake 15.jpg'},
          {'image_file': 'images/high__10_Lake 14.jpg'},
          {'image_file': 'images/high__11_Fireworks 2.jpg'},
          {'image_file': 'images/high__12_Penguins 2.jpg'},
          {'image_file': 'images/high__13_Lake 1.jpg'},
          {'image_file': 'images/high__14_Rainbow 1.jpg'},
          {'image_file': 'images/high__15_Siblings 1.jpg'},
          {'image_file': 'images/high__16_Dog 4.jpg'},
          {'image_file': 'images/high__17_Baby 1.jpg'},
          {'image_file': 'images/high__18_Cat 5.jpg'}]
        Routine high_val_imgs
      LoopTerminator within_high_block
      Routine high_fixation_cross
    LoopTerminator high_block
    LoopInitiator low_block loopType="TrialHandler"
      loopType = sequential
      nReps = low_nReps
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      LoopInitiator within_low_block loopType="TrialHandler"
        Selected rows = $low_imgs_order.pop()
        conditionsFile = low_valence.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'image_file': 'images/low__1_Miserable pose 3.jpg'},
          {'image_file': 'images/low__2_Dummy 1.jpg'},
          {'image_file': 'images/low__3_Dead bodies 1.jpg'},
          {'image_file': 'images/low__4_Dead bodies 2.jpg'},
          {'image_file': 'images/low__5_KKK rally 2.jpg'},
          {'image_file': 'images/low__6_Dog 26.jpg'},
          {'image_file': 'images/low__7_Dead bodies 3.jpg'},
          {'image_file': 'images/low__8_KKK rally 1.jpg'},
          {'image_file': 'images/low__9_Injury 4.jpg'},
          {'image_file': 'images/low__10_Tumor 1.jpg'},
          {'image_file': 'images/low__11_War 6.jpg'},
          {'image_file': 'images/low__12_Fire 9.jpg'},
          {'image_file': 'images/low__13_Garbage dump 2.jpg'},
          {'image_file': 'images/low__14_Dirt 1.jpg'},
          {'image_file': 'images/low__15_Garbage dump 4.jpg'},
          {'image_file': 'images/low__16_Animal carcass 5.jpg'},
          {'image_file': 'images/low__17_Severed finger 1.jpg'},
          {'image_file': 'images/low__18_Fire 7.jpg'}]
        Routine low_val_imgs
      LoopTerminator within_low_block
      Routine low_fixation_cross
    LoopTerminator low_block
  LoopTerminator block_repeat
