PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = 6_SlowBreathingSYMTask
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine slow_breathing_image
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    ImageComponent image_1
      image = ./images/SYM_SlowBreathingTask.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        #Before Routine
        ### START ROUTINE SBASODI1 (Breathing Image)
        ut.task_trigger(value="11", port=port, outlet=outlet, desc="Breathing Image")
      End Routine:
        #End Routine
        ### END ROUTINE SBASODI1 (Breathing Image)
        ut.task_trigger(value="12", port=port, outlet=outlet, desc="Breathing Image")
  Routine slow_breathing_video
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    MovieComponent breathing_video
      backend = ffpyplayer
      forceEndRoutine = False
      movie = ./videos/SYM_BreathingVideoEdited.mp4
      size = (1.6, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 242
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    CodeComponent code
      Code Type = Py
      Before Experiment:
        ##BEFORE EXPERIMENT
        import utils as ut
      Begin Routine:
        #Before Routine
        ### START ROUTINE SBASODI1 (VIDEO START)
        ut.task_trigger(value="9", port=port, outlet=outlet, desc="Video start")
      End Routine:
        #End Routine
        ### END ROUTINE SBASODI1 (VIDEO END)
        ut.task_trigger(value="10", port=port, outlet=outlet, desc="Video end")
Flow
  Routine slow_breathing_video
  Routine slow_breathing_image
